PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  colPriority = {'': ''}
  color = $[1,1,1]
  expName = ganzflicker
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    CodeComponent welcome_code
      Code Type = Py
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      Begin JS Experiment:
        title = new visual.TextStim({"win": psychoJS.window, "text": "Welcome to our study!", "height": 0.08, "color": "white", "bold": true, "pos": [0, 0.4], "alignText": "center"});
        body = new visual.TextStim({"win": psychoJS.window, "text": "Thank you for agreeing to participate!\n\nBackground:\nA visual flicker is known to induce \"Ganzfeld imagery\" (Allefeld et al., 2011; Sumich et al., 2018), a type of visual pseudo-hallucination. The continuous flicker facilitates visual imagery, but does not induce any permanent changes in the brain and does not elicit actual hallucinations. We are interested to learn about the types of illusions people experience when viewing continuous flicker.\n\nPress SPACE to continue.", "height": 0.04, "color": "white", "alignText": "left", "anchorHoriz": "left", "wrapWidth": 1.6, "pos": [(- 0.8), 0.1]});
      Begin Routine:
        # Title: large, bold, centered
        title = visual.TextStim(
            win=win,
            text="Welcome to our study!",
            height=0.08,
            color="black",
            bold=True,
            pos=(0, 0.3),
            alignText='center',
        )

        # Body paragraph: left-aligned, smaller font
        body_text = (
            "Thank you for agreeing to participate!\n\n"
            "Background:\n"
            'A visual flicker is known to induce "Ganzfeld imagery" (Allefeld et al., 2011; Sumich et al., 2018), '
            "a type of visual pseudo-hallucination. The continuous flicker facilitates visual imagery, but does not "
            "induce any permanent changes in the brain and does not elicit actual hallucinations. We are interested to "
            "learn about the types of illusions people experience when viewing continuous flicker."
        )

        body = visual.TextStim(
            win=win,
            text=body_text,
            height=0.04,
            color="black",
            bold=False,
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.0)
        )

        # "Press SPACE to continue" as a bolded instruction, separated below
        continue_prompt = visual.TextStim(
            win=win,
            text="Press ENTER to continue",
            height=0.045,
            color="black",
            bold=True,
            alignText='center',
            pos=(0, -0.3)
        )
      Each Frame:
        title.draw()
        body.draw()
        continue_prompt.draw()
    KeyboardComponent welcome_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent setup_code
      Code Type = Py
      Begin Experiment:
        eyetracking = 0 #0 is not tracking, 1 is tracking

        # Measure screen refresh rate at experiment start
        frame_rate = win.getActualFrameRate()
        if frame_rate is None:
            frame_rate = 60  # fallback if detection fails

        expInfo['frameRate'] = frame_rate
        thisExp.addData('Detected_RefreshRate', frame_rate)

        # Just print for debugging/logging (don't calculate flicker timing here)
        print(f"Detected refresh rate: {frame_rate} Hz")
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent instructions_code
      Code Type = Py
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      Begin Routine:
        # Title: large, bold, centered
        title = visual.TextStim(
            win=win,
            text="Instructions",
            height=0.08,
            color="black",
            bold=True,
            pos=(0, 0.3),
            alignText='center',
        )

        # Body paragraph: left-aligned, smaller font
        body_text = (
            "The Ganzflicker is a continuous red and black flicker you will be viewing "
            "while listening to white noise with headphones. The experience will last for ~10 minutes.\n\n"
            "While viewing the flickering screen, please press the SPACEBAR whenever you experience a visual hallucination."
        )

        body = visual.TextStim(
            win=win,
            text=body_text,
            height=0.04,
            color="black",
            bold=False,
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.0)
        )

        # "Press SPACE to continue" as a bolded instruction, separated below
        continue_prompt = visual.TextStim(
            win=win,
            text="Press ENTER to continue",
            height=0.045,
            color="black",
            bold=True,
            alignText='center',
            pos=(0, -0.2)
        )
      Each Frame:
        title.draw()
        body.draw()
        continue_prompt.draw()
    KeyboardComponent instructions_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine flicker
    CodeComponent elRecord_flicker
      Code Type = Py
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      Begin Routine:
        this_epoch = 'flicker'
        aaa = core.monotonicClock.getTime
        thisExp.addData('flicker',str(aaa()))
        if eyetracking == 1:
            # get a reference to the currently active EyeLink connection
            el_tracker = pylink.getEYELINK()

            try:
                #start recording
                el_tracker.startRecording(1, 1, 1, 1)
                #send message to tracker to count trial number
                el_tracker.sendMessage('flickerStarts')
            except RuntimeError as error:
                print("ERROR:", error)
                abort_trial()
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('flickerEnds',str(aaa()))
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    PolygonComponent flicker_rect
      fillColor [set every frame] = $flicker_color
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      units = norm
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    CodeComponent flicker_code
      Code Type = Py
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      Begin Routine:
        # Initialize flicker variables
        flicker_color = 'red'  # Initial flicker state
        flicker_freq = 7.5     # Flicker frequency in Hz
        frameN = 0
        frame_count = 0

        # Calculate how many frames per half-cycle (red/black)
        frames_per_half_cycle = round(expInfo['frameRate'] / (2 * flicker_freq))

        # Clear keyboard buffer to prevent carryover keypresses
        event.clearEvents()
        hallucination_key.clearEvents()  # Specifically clear that key component

        # Mark when flicker starts (for logging hallucination timing)
        flicker_start_time = globalClock.getTime()
      Each Frame:
        # Flicker logic
        frameN += 1
        frame_count += 1

        if (frame_count // frames_per_half_cycle) % 2 == 0:
            flicker_color = 'red'
        else:
            flicker_color = 'black'

        # Log hallucination keypresses only
        keys = hallucination_key.getKeys(clear=True)
        for k in keys:
            if k.name == 'escape':
                core.quit()  # Immediately exit if escape is pressed
            elif k.name == 'space':
                if eyetracking == 1:
                    el_tracker.sendMessage('hallucination y')
                thisExp.addData('key', k.name)
                thisExp.addData('press_time', globalClock.getTime())
                thisExp.addData('time_since_flicker_start', globalClock.getTime() - flicker_start_time)
                thisExp.nextEntry()
    SoundComponent white_noise
      saveStartStop = False
      sound = white_noise.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    KeyboardComponent hallucination_key
      allowedKeys = 'space', 'escape' 
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine warning
    RoutineSettingsComponent warning
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # Main body of text
        warning_intro = visual.TextStim(
            win=win,
            text="If at any time, the Ganzflicker becomes highly unpleasant for you, you are not obligated to continue.",
            height=0.04,
            color="black",
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.35)
        )

        # RED warning text
        warning_red = visual.TextStim(
            win=win,
            text="Warning: Do not continue the study if you have photosensitive epilepsy!\nLet the researcher know and we will finish the study here.",
            height=0.045,
            color="red",
            bold=True,
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.2)
        )

        # Final instruction
        warning_final = visual.TextStim(
            win=win,
            text='When you press ENTER the Ganzflicker experience will immediately start',
            height=0.04,
            color="black",
            bold=True,
            alignText='left',
            anchorHoriz='left',
            wrapWidth=1.6,
            pos=(-0.8, 0.05)
        )
      Each Frame:
        warning_intro.draw()
        warning_red.draw()
        warning_final.draw()
    KeyboardComponent warning_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine thanks
    RoutineSettingsComponent thanks
      saveStartStop = False
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    CodeComponent thanks_code
      Code Type = Py
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      Begin Routine:
        thank_you_text = visual.TextStim(
            win=win,
            text="Thank you! I hope you enjoyed your experience.\nWait for the researcher, they should be back in a second.",
            height=0.05,
            color="black",
            bold=False,
            alignText='center',
            anchorHoriz='center',
            wrapWidth=1.6,
            pos=(0, 0)  # centered horizontally and vertically
        )
      Each Frame:
        thank_you_text.draw()
    KeyboardComponent thanks_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine connectEL
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    CodeComponent connectTracker
      Code Type = Py
      Before Experiment:
        import platform
        from PIL import Image  # for preparing the Host backdrop image
        from string import ascii_letters
        import time

        # import eyelink libs
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
      Begin Experiment:
        if eyetracking == 1:
            # this is adapted from the SR research's eyelink tutorial code
            #parameters to change
            calib_style = 13 #9 for head fixed, 13 for remote
            samprate = 1000 #250, 500, 1000, or 2000
            calib_tar_size = 24 #size for the calibration target

            """change this"""
            width_param = 53.0
            distance_param =70.0


            #create a folder to store all edf files, call this folder 'results'
            edf_folder = 'C:/Users/yud070/Documents/elRaw'
            if not os.path.exists(edf_folder):
                os.makedirs(edf_folder)

            # We download EDF data file from the EyeLink Host PC to the local hard
            # drive at the end of each testing session, here we rename the EDF to
            # include session start date/time
            time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
            session_identifier = str(expInfo['participant']) + time_str

            # create a folder for the current testing session in the "results" folder
            session_folder = os.path.join(edf_folder, session_identifier)
            if not os.path.exists(session_folder):
                os.makedirs(session_folder)


            #helper function for displaying text
            def clear_screen(win):
                """ clear up the PsychoPy window"""

                win.fillColor = genv.getBackgroundColor()
                win.flip()
            def show_msg(win, text, wait_for_keypress=True):
                """ Show task instructions on screen"""

                msg = visual.TextStim(win, text,
                                      color=genv.getForegroundColor(),
                                      wrapWidth=scn_width/2)
                clear_screen(win)
                msg.draw()
                win.flip()

                # wait indefinitely, terminates upon any key press
                if wait_for_keypress:
                    event.waitKeys(keyList = ['space','escape'],maxWait = 60)
                    clear_screen(win)

            #function to terminate task and retrieve the EDF data file from the host PC and
            #download to the display pc
            def terminate_task():
                el_tracker = pylink.getEYELINK()

                if el_tracker.isConnected():

                    # Put tracker in Offline mode
                    el_tracker.setOfflineMode()

                    # Clear the Host PC screen and wait for 500 ms
                    el_tracker.sendCommand('clear_screen 0')
                    pylink.msecDelay(500)

                    # Close the edf data file on the Host
                    el_tracker.closeDataFile()

                    # Show a file transfer message on the screen
                    msg = 'EDF data is transferring from EyeLink Host PC...'
                    show_msg(win, msg, wait_for_keypress=False)

                    # Download the EDF data file from the Host PC to a local data folder
                    # parameters: source_file_on_the_host, destination_file_on_local_drive
                    local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                    try:
                        el_tracker.receiveDataFile(edf_file, local_edf)
                    except RuntimeError as error:
                        print('ERROR:', error)

                    # Close the link to the tracker.
                    el_tracker.close()

                # close the PsychoPy window
                win.close()

                # quit PsychoPy
                core.quit()
                sys.exit()

            def abort_trial():
                """Ends recording """

                el_tracker = pylink.getEYELINK()

                # Stop recording
                if el_tracker.isRecording():
                    # add 100 ms to catch final trial events
                    pylink.pumpDelay(100)
                    el_tracker.stopRecording()

                # clear the screen
                clear_screen(win)
                # Send a message to clear the Data Viewer screen
                bgcolor_RGB = (116, 116, 116)
                el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

                # send a message to mark trial end
                el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)
      Begin Routine:
        # Step 1: Connect to the EyeLink Host PC
        host_ip = "100.1.1.1"
        if eyetracking == 1:
            try:
                el_tracker = pylink.EyeLink(host_ip)
            except RuntimeError as error:
                print('ERROR:', error)
                core.quit()
                sys.exit()

            # Step 2: Open an EDF data file on the Host PC
            edf_file = str(expInfo['participant']) + ".EDF"
            try:
                el_tracker.openDataFile(edf_file)
            except RuntimeError as err:
                print('ERROR:', err)
                # close the link if we have one open
                if el_tracker.isConnected():
                    el_tracker.close()
                core.quit()
                sys.exit()

            # Step 3: Configure the tracker
            # Put the tracker in offline mode before we change tracking parameters
            el_tracker.setOfflineMode()
            # File and Link data control
            # what eye events to save in the EDF file, include everything by default
            file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
            file_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,HREF,RAW,PUPIL,AREA,HTARGET,STATUS,INPUT'
            # what eye events to make available over the link, include everything by default
            link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
            el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
            el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
            el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
            el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)
            #set calibration style
            el_tracker.sendCommand("calibration_type = HV%s" % str(calib_style))
            #set sampling rate
            el_tracker.sendCommand("sample_rate %s" % str(samprate))

            # Step 4: set up a graphics environment for calibration
            # get the native screen resolution used by PsychoPy
            scn_width, scn_height = win.size
            # resolution fix for Mac retina displays
            if 'Darwin' in platform.system():
                if use_retina:
                    scn_width = int(scn_width/2.0)
                    scn_height = int(scn_height/2.0)
            # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
            el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendCommand(el_coords)
            # Write a DISPLAY_COORDS message to the EDF file
            # Data Viewer needs this piece of info for proper visualization
            dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendMessage(dv_coords)
            # Configure a graphics environment (genv) for tracker calibration
            genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
            # Set background and foreground colors for the calibration target
            # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
            foreground_color = (-1, -1, -1)
            background_color = win.color
            genv.setCalibrationColors(foreground_color, background_color)
            genv.setTargetSize(calib_tar_size)
            # Request Pylink to use the PsychoPy window we opened above for calibration
            pylink.openGraphicsEx(genv)
            task_msg = 'Press <space>, then <enter> to start calibration'
            show_msg(win, task_msg)
            print('line69')

            try:
                el_tracker.doTrackerSetup()
            except RuntimeError as err:
                print('ERROR:', err)
                el_tracker.exitCalibration()
        else:
            continueRoutine = False
      End Routine:
        #dont record yet
        if eyetracking == 1:
            el_tracker.setOfflineMode()
        win.mouseVisible = True
  Routine terminateExp
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    CodeComponent closeEl
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracking == 1:

            # Step 7: disconnect, download the EDF file, then terminate the task
            terminate_task()
Flow
  Routine welcome
  Routine connectEL
  Routine instructions
  Routine warning
  Routine flicker
  Routine thanks
  Routine terminateExp
